PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cardio-audio-sleep
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Routines
  Routine cross
    PolygonComponent cross_polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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  Routine category
    TextComponent text_category
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        1: wind
        2: brass
        3: percussion
    KeyboardComponent key_category
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent text_instructions
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will hear 15 pure tones followed by an instrument sound.
        After the instrument sound, enter the sound category on the keyboard:

        - Press 1 for wind
        - Press 2 for brass
        - Press 3 for percussion

        Press SPACE to continue
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine confidence
    TextComponent text_confidence
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you?
      units = norm
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    SliderComponent slider_confidence
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "low", "high"
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ButtonComponent button_confidence
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.5)
      save = none
      saveStartStop = False
      size = (0.18, 0.1)
      startVal [time (s)] = 0
      text = Confirm
      units = norm
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Flow
  Routine instructions
  Routine cross
  Routine category
  Routine confidence
